PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine code
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    CodeComponent declarations
      Code Type = Auto->JS
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      Begin Experiment:
        difficultTargetDuration=0.06
        responseKeys=[['f','the F key'],['j','the J key']]
        shuffle(responseKeys)

        def generateTargetString(targetLetter, isDifficult):
            lowerBound = 1 if isDifficult else 2
            upperBound = 6 if isDifficult else 5
            position = randint(lowerBound, upperBound)
            return position * 'X' + targetLetter + (7 - position) * 'X'

        def getTargetDuration(isDifficult):
            return difficultTargetDuration if isDifficult else 0.15

        def answeredCorrectly(targetLetter, responseKey):
            if targetLetter == 'T' and responseKey == keyForT():
                return True
            elif targetLetter == 'L' and responseKey == keyForL():
                return True
            return False

        def keyForT():
            return responseKeys[0][0]

        def keyForL():
            return responseKeys[1][0]
        # generates a random duration in seconds from lowerBound to upperBound
        # lowerBound and upperBound cannot have more than one decimal place.
        def randomDelay(lowerBound, upperBound):
            lowerBoundDec = lowerBound * 10
            upperBoundDec = upperBound * 10
            randomDelayDec = randint(lowerBoundDec,upperBoundDec)
            return randomDelayDec / 10
  Routine landing_page
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    TextboxComponent upper_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.30)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        This task is comprised of a series of trials. On each trial you will see a fixation followed by a string of letters in the center of the screen.

        Please decide whether the string contains a T or an L.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent t_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Press " + responseKeys[0][1] + " if the letter was T."
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    TextboxComponent l_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = $"Press " + responseKeys[1][1] + " if the letter was L."
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    TextboxComponent lower_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.26)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        The computer will then provide you with feedback on your choice. The feedback may not always be 100% accurate.

        Immediately after the feedback the same trial will be presented again, so you will have the chance to change your mind if you wish.

        Press any key to continue.
  Routine first_round
    CodeComponent randomize_feedback
      Code Type = Auto->JS
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      Begin Routine:
        feedbackColor = "green"
        feedbackText = "+ correct +"
        if random() > 0.5:
            feedbackColor = "red"
            feedbackText = "x wrong x"
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    TextboxComponent fixation_one
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent target
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,isDifficult)
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    KeyboardComponent resp_one
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [condition] = $len(resp_one.keys) >= 1
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    TextboxComponent target_masked
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    TextboxComponent pre_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $len(resp_one.keys) >= 1 and target_masked.status==FINISHED
      stopVal [duration (s)] = $randomDelay(1,3)
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    TextboxComponent feedback
      bold = False
      color [set every repeat] = $feedbackColor
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $pre_feedback_delay.status==FINISHED
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackText
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    TextboxComponent post_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $feedback.status==FINISHED
      stopVal [duration (s)] = $randomDelay(1,3)
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    CodeComponent update_target_duration
      Code Type = Auto->JS
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      End Routine:
        if isDifficult:
            wasCorrect = answeredCorrectly(targetLetter, resp_one.keys[0])
            difficultTargetDuration += -0.01 if wasCorrect else 0.01
            if difficultTargetDuration > 0.15:
                difficultTargetDuration = 0.15
            elif difficultTargetDuration < 0.01:
                difficultTargetDuration = 0.01
  Routine second_routine
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    TextboxComponent fixation_two
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 2
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    TextboxComponent target_two
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,isDifficult)
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    KeyboardComponent resp_two
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [condition] = $len(resp_two.keys) >= 1
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    TextboxComponent target_masked_two
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    TextboxComponent intertrial_interval
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $len(resp_two.keys) >= 1 and target_masked_two.status==FINISHED
      stopVal [duration (s)] = $randomDelay(1,2.5)
      text = INTERTRIAL INTERVAL
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Flow
  Routine code
  Routine landing_page
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('targetLetter', 'T'), ('isDifficult', 0)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 1)])]
    Routine first_round
    Routine second_routine
  LoopTerminator trials
